PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = prelearned_chunks
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        Press space plis.
    KeyboardComponent keySkip1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent textThanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks!
        Press space plis.
    KeyboardComponent keySkip2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letras
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    CodeComponent codeLetras
      Code Type = Auto->JS
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      Before Experiment:
        stimMap = {
            0: {
                'letter1':'letter1','type1':'type_letter1',
                'letter2':'letter2','type2':'type_letter2',
                'letter3':'letter3','type3':'type_letter3',
                'letter4':'letter4','type4':'type_letter4',
                'letter5':'letter5','type5':'type_letter5',
                'letter6':'letter6','type6':'type_letter6',
                'letter7':'letter7','type7':'type_letter7',
                'letter8':'letter8','type8':'type_letter8'
            }
        }

        blockOrder = [0]
        shuffle(blockOrder)
      Begin Routine:
        stimInfo = stimMap[blockOrder[trials.thisRepN]]

        # leer letras y tipos desde Excel
        letters = []
        types = []
        for i in range(1, 9):
            letters.append(thisTrial[stimInfo[f'letter{i}']])
            types.append(thisTrial[stimInfo[f'type{i}']])

        # posiciones de los pares
        positions = [ (0, 0.3),   # arriba
                      (0.3, 0),   # derecha
                      (0, -0.3),  # abajo
                      (-0.3, 0)]  # izquierda

        stims = []
        for i in range(4):
            stimA = visual.TextStim(
                win=win,
                text=letters[2*i],
                bold=(types[2*i].lower()=='bold'),
                italic=(types[2*i].lower()=='italic'),
                pos=positions[i],
                height=0.05
            )
            stimB = visual.TextStim(
                win=win,
                text=letters[2*i+1],
                bold=(types[2*i+1].lower()=='bold'),
                italic=(types[2*i+1].lower()=='italic'),
                pos=(positions[i][0]+0.1, positions[i][1]), # desplazamiento a la derecha
                height=0.05
            )
            stims.extend([stimA, stimB])
      Each Frame:
        for s in stims:
            s.draw()
    KeyboardComponent keyLetras
      allowedKeys = 'y','n','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent textCrossLetras
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine blanco
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    TextComponent textCrossBlanco
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine respuesta
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    CodeComponent codeRespuesta
      Code Type = Auto->JS
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      Before Experiment:
        # Opciones de respuesta
        respMap = {
            'target': 'letterTarget',
            'foil1': 'letterFoil1',
            'foil2': 'letterFoil2',
            'foil3': 'letterFoil3'
        }

        # Posiciones para mostrar las 4 opciones en la parte inferior de la pantalla
        resp_positions = [(-0.3, -0.5), (-0.1, -0.5), (0.1, -0.5), (0.3, -0.5)]
      Begin Routine:
        # Begin Routine
        starPos = int(thisTrial['starPosition']) - 1
        star_position_coords = [
            (0, 0.25), (0.08, 0.25),
            (0.25, 0), (0.33, 0),
            (0, -0.25), (0.08, -0.25),
            (-0.25, 0), (-0.17, 0)
        ]

        # crear la cruz con '-' excepto en la posición marcada
        crossStims = []
        for i, pos in enumerate(star_position_coords):
            if i == starPos:
                text = '*'
            else:
                text = '-'
            crossStims.append(visual.TextStim(win=win, text=text, pos=pos, height=0.05))

        # posiciones de las opciones
        resp_positions = [(-0.35, -0.45), (-0.12, -0.45), (0.12, -0.45), (0.35, -0.45)]
        respStims = [
            visual.TextStim(
                win=win,
                text=thisTrial['letterTarget'],
                bold=(thisTrial['TypeTarget'].lower()=='bold'),
                italic=(thisTrial['TypeTarget'].lower()=='italic'),
                pos=resp_positions[0],
                height=0.07
            ),
            visual.TextStim(
                win=win,
                text=thisTrial['letterFoil1'],
                bold=(thisTrial['typeFoil1'].lower()=='bold'),
                italic=(thisTrial['typeFoil1'].lower()=='italic'),
                pos=resp_positions[1],
                height=0.07
            ),
            visual.TextStim(
                win=win,
                text=thisTrial['letterFoil2'],
                bold=(thisTrial['typeFoil2'].lower()=='bold'),
                italic=(thisTrial['typeFoil2'].lower()=='italic'),
                pos=resp_positions[2],
                height=0.07
            ),
            visual.TextStim(
                win=win,
                text=thisTrial['letterFoil3'],
                bold=(thisTrial['typeFoil3'].lower()=='bold'),
                italic=(thisTrial['typeFoil3'].lower()=='italic'),
                pos=resp_positions[3],
                height=0.07
            )
        ]

        # guardar la respuesta correcta
        correct_resp = thisTrial['letterTarget']
      Each Frame:
        # dibujar la cruz
        for stim in crossStims:
            stim.draw()

        # dibujar las opciones de respuesta
        for stim in respStims:
            stim.draw()
    KeyboardComponent keyRespuesta
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textCrossRespuesta
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = config/config.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialType': 'chunk', 'letter1': 'M', 'type_letter1': 'bold', 'letter2': 'Y', 'type_letter2': 'bold', 'letter3': 'U', 'type_letter3': 'italic', 'letter4': 'P', 'type_letter4': 'italic', 'letter5': 'A', 'type_letter5': 'bold', 'letter6': 'S', 'type_letter6': 'italic', 'letter7': 'T', 'type_letter7': 'italic', 'letter8': 'O', 'type_letter8': 'italic', 'starPosition': 1.0, 'letterTarget': 'M', 'TypeTarget': 'bold', 'letterFoil1': 'M', 'typeFoil1': 'italic', 'letterFoil2': 'I', 'typeFoil2': 'bold', 'letterFoil3': 'I', 'typeFoil3': 'italic'},
      {'trialType': 'chunk', 'letter1': 'U', 'type_letter1': 'bold', 'letter2': 'P', 'type_letter2': 'italic', 'letter3': 'I', 'type_letter3': 'bold', 'letter4': 'F', 'type_letter4': 'italic', 'letter5': 'T', 'type_letter5': 'italic', 'letter6': 'O', 'type_letter6': 'bold', 'letter7': 'A', 'type_letter7': 'bold', 'letter8': 'S', 'type_letter8': 'italic', 'starPosition': 2.0, 'letterTarget': 'P', 'TypeTarget': 'italic', 'letterFoil1': 'P', 'typeFoil1': 'bold', 'letterFoil2': 'W', 'typeFoil2': 'italic', 'letterFoil3': 'W', 'typeFoil3': 'bold'},
      {'trialType': 'chunk', 'letter1': 'T', 'type_letter1': 'bold', 'letter2': 'O', 'type_letter2': 'bold', 'letter3': 'U', 'type_letter3': 'bold', 'letter4': 'P', 'type_letter4': 'italic', 'letter5': 'A', 'type_letter5': 'italic', 'letter6': 'S', 'type_letter6': 'italic', 'letter7': 'W', 'type_letter7': 'bold', 'letter8': 'E', 'type_letter8': 'italic', 'starPosition': 3.0, 'letterTarget': 'U', 'TypeTarget': 'bold', 'letterFoil1': 'U', 'typeFoil1': 'italic', 'letterFoil2': 'I', 'typeFoil2': 'bold', 'letterFoil3': 'I', 'typeFoil3': 'italic'},
      {'trialType': 'chunk', 'letter1': 'W', 'type_letter1': 'italic', 'letter2': 'E', 'type_letter2': 'italic', 'letter3': 'U', 'type_letter3': 'italic', 'letter4': 'P', 'type_letter4': 'italic', 'letter5': 'I', 'type_letter5': 'italic', 'letter6': 'F', 'type_letter6': 'bold', 'letter7': 'T', 'type_letter7': 'italic', 'letter8': 'O', 'type_letter8': 'italic', 'starPosition': 4.0, 'letterTarget': 'P', 'TypeTarget': 'italic', 'letterFoil1': 'P', 'typeFoil1': 'bold', 'letterFoil2': 'A', 'typeFoil2': 'italic', 'letterFoil3': 'A', 'typeFoil3': 'bold'}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
    Routine letras
    Routine blanco
    Routine respuesta
  LoopTerminator trials
  Routine thanks
