PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = prueba
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instruccion
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    TextComponent text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Bienvenid@ a la prueba

        En este experimento, verás en cada ensayo 4 pares de letras.
        A veces los pares formarán PALABRAS REALES de 2 letras (por ejemplo: WE, TO, AS). Otras veces, los pares serán COMBINACIONES ALEATORIAS de letras. Cada letra estará escrita en NEGRITA o CURSIVA.

        Tu tarea es la siguiente:
        Después de ver las letras, te preguntaremos por una letra específica.
        Debes indicar:
        1. Qué letra era.
        2. En qué formato estaba (negrita o cursiva).

        En la pantalla de respuesta verás 4 opciones que combinan letra y formato.
        Debes seleccionar la opción correcta.

        Ten en cuenta esto:
        a. Presta atención tanto a la letra como a su formato.
        b. No hay límite de tiempo, pero responde lo más rápido y preciso posible.
        c. Usa el ratón para seleccionar la opción.

        Presiona ESPACIO para comenzar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letras
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    TextComponent letra1
      font [set every repeat] = $type_letter1
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter1
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    TextComponent letra2
      font [set every repeat] = $type_letter2
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter2
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    TextComponent letra3
      font [set every repeat] = $type_letter3
      letterHeight = 0.05
      pos = (-0.025, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter3
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    TextComponent letra4
      font [set every repeat] = $type_letter4
      letterHeight = 0.05
      pos = (0.025, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter4
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    TextComponent letra5
      font [set every repeat] = $type_letter5
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter5
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    TextComponent letra6
      font [set every repeat] = $type_letter6
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter6
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    TextComponent letra7
      font [set every repeat] = $type_letter7
      letterHeight = 0.05
      pos = (-0.025, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter7
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    TextComponent letra8
      font [set every repeat] = $type_letter8
      letterHeight = 0.05
      pos = (0.025, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $letter8
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  Routine espera
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    TextComponent Espera
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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  Routine pRespuesta
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    TextComponent Alternativa_1
      font [set every repeat] = $typeFoil1
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letterFoil1
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    TextComponent Alternativa_2
      font [set every repeat] = $typeFoil2
      letterHeight = 0.05
      pos = (-0.1, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letterFoil2
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    TextComponent Alternativa_3
      font [set every repeat] = $typeFoil3
      letterHeight = 0.05
      pos = (0.1, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letterFoil3
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    TextComponent Alternativa_4
      font [set every repeat] = $typeFoil4
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $letterFoil4
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    MouseComponent mouse
      clickable = Alternativa_1, Alternativa_2, Alternativa_3, Alternativa_4
      correctAns = correctAnswer
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent codeMouse
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        Alternativa_1.value = 1
        Alternativa_2.value = 2
        Alternativa_3.value = 3
        Alternativa_4.value = 4
        correcto = 0   # reiniciamos en cada trial
        respuesta = None
      Each Frame:
        for obj in [Alternativa_1, Alternativa_2, Alternativa_3, Alternativa_4]:
            if mouse.isPressedIn(obj):
                respuesta_elegida = obj.value
                if respuesta_elegida == correctAnswer:
                    correcto = 1
                else:
                    correcto = 0
      End Routine:
        thisExp.addData('respuesta', respuesta_elegida)
        thisExp.addData('correctAnswer', correctAnswer)
        thisExp.addData('correcto', correcto)
    CodeComponent codeVisual
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine
        starPos = int(thisTrial['starPosition']) - 1
        star_position_coords = [
            (-0.25, 0), (-0.2, 0),
            (-0.025, 0.2), (0.025, 0.2),
            (0.2, 0), (0.25, 0),
            (-0.025, -0.2), (0.025, -0.2)
        ]

        # crear la cruz con '-' excepto en la posición marcada
        crossStims = []
        for i, pos in enumerate(star_position_coords):
            if i == starPos:
                text = '*'
            else:
                text = '-'
            crossStims.append(visual.TextStim(win=win, text=text, pos=pos, height=0.05))
      Each Frame:
        for stim in crossStims:
            stim.draw()
  Routine Despedida
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Has llegado al final de la prueba.
        ¡Muchas gracias por tu participación! :D
Flow
  Routine Instruccion
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = config.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
      [{'trialType': 'chunk', 'letter1': 'M', 'type_letter1': 'bold', 'letter2': 'Y', 'type_letter2': 'bold', 'letter3': 'U', 'type_letter3': 'Roboto', 'letter4': 'P', 'type_letter4': 'Roboto', 'letter5': 'A', 'type_letter5': 'bold', 'letter6': 'S', 'type_letter6': 'Roboto', 'letter7': 'T', 'type_letter7': 'Roboto', 'letter8': 'O', 'type_letter8': 'Roboto', 'starPosition': 1, 'letterFoil1': 'I', 'typeFoil1': 'bold', 'letterFoil2': 'I', 'typeFoil2': 'Roboto', 'letterFoil3': 'M', 'typeFoil3': 'Roboto', 'letterFoil4': 'M', 'typeFoil4': 'bold', 'correctAnswer': 4},
      {'trialType': 'chunk', 'letter1': 'U', 'type_letter1': 'bold', 'letter2': 'P', 'type_letter2': 'Roboto', 'letter3': 'I', 'type_letter3': 'bold', 'letter4': 'F', 'type_letter4': 'Roboto', 'letter5': 'T', 'type_letter5': 'Roboto', 'letter6': 'O', 'type_letter6': 'bold', 'letter7': 'A', 'type_letter7': 'bold', 'letter8': 'S', 'type_letter8': 'Roboto', 'starPosition': 2, 'letterFoil1': 'W', 'typeFoil1': 'bold', 'letterFoil2': 'P', 'typeFoil2': 'Roboto', 'letterFoil3': 'P', 'typeFoil3': 'bold', 'letterFoil4': 'W', 'typeFoil4': 'Roboto', 'correctAnswer': 2},
      {'trialType': 'chunk', 'letter1': 'T', 'type_letter1': 'bold', 'letter2': 'O', 'type_letter2': 'bold', 'letter3': 'U', 'type_letter3': 'bold', 'letter4': 'P', 'type_letter4': 'Roboto', 'letter5': 'A', 'type_letter5': 'Roboto', 'letter6': 'S', 'type_letter6': 'Roboto', 'letter7': 'W', 'type_letter7': 'bold', 'letter8': 'E', 'type_letter8': 'Roboto', 'starPosition': 3, 'letterFoil1': 'U', 'typeFoil1': 'Roboto', 'letterFoil2': 'I', 'typeFoil2': 'Roboto', 'letterFoil3': 'U', 'typeFoil3': 'bold', 'letterFoil4': 'I', 'typeFoil4': 'bold', 'correctAnswer': 3},
      {'trialType': 'chunk', 'letter1': 'W', 'type_letter1': 'Roboto', 'letter2': 'E', 'type_letter2': 'Roboto', 'letter3': 'U', 'type_letter3': 'Roboto', 'letter4': 'P', 'type_letter4': 'Roboto', 'letter5': 'I', 'type_letter5': 'Roboto', 'letter6': 'F', 'type_letter6': 'bold', 'letter7': 'T', 'type_letter7': 'Roboto', 'letter8': 'O', 'type_letter8': 'Roboto', 'starPosition': 4, 'letterFoil1': 'A', 'typeFoil1': 'Roboto', 'letterFoil2': 'A', 'typeFoil2': 'bold', 'letterFoil3': 'P', 'typeFoil3': 'bold', 'letterFoil4': 'P', 'typeFoil4': 'Roboto', 'correctAnswer': 4}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
    Routine letras
    Routine espera
    Routine pRespuesta
  LoopTerminator trials
  Routine Despedida
